CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "tif")
    Name to assign these images:color
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:color
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Grayscale
    Convert green to gray?:No
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    Convert blue to gray?:No
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
Threshold:[module_num:6|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
    Select the input image:Grayscale
    Name the output image:GrayThreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:Grayscale
    Name the output image:Enhance
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Enhance
    Name the primary objects to be identified:Membrane
    Typical diameter of objects, in pixel units (Min,Max):20,13000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Membrane
    Name the output image:Membrane2
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:Enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:11|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
    Select the input image:Inverted
    Name the output image:Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Membrane2
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Inverted
    Name the primary objects to be identified:Adipocytes
    Typical diameter of objects, in pixel units (Min,Max):5,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:500
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Adipocytes
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:GrayThreshold
    Select objects to measure:Adipocytes

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Grayscale
    Name the output image:OvelayAdipocytes
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Adipocytes

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:Adipocytes
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OvelayAdipocytes
    Text color:red
    Name the output image that has the measurements displayed:AdipocytesID
    Font size (points):6
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:AdipocytesID
    Select method for constructing file names:From image filename
    Select image name for file prefix:color
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CalculateMath:[module_num:18|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
    Name the output measurement:Area_uM
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:Adipocytes
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|C:\\Users\\shall\\OneDrive\\桌面\\20210701-cellprofiler output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Adipocytes|Intensity_MeanIntensity_GrayThreshold,Adipocytes|Location_Center_Y,Adipocytes|Location_Center_X,Adipocytes|Location_Center_Z,Adipocytes|AreaShape_FormFactor,Adipocytes|AreaShape_Eccentricity,Adipocytes|AreaShape_Area,Adipocytes|Math_Area_uM
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:Adipocytes
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
